<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            {filestring}
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">1.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses1</parameter>
        <parameter name="Output netCDF filename (optional)" selected="true">
            <current_file>C:\Users\Martin\Documents\IJS-offline\MZmine opt\t1.cfd</current_file>
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        </parameter>
    </batchstep>
	<batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">1.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses2</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass list">masses1</parameter>
        <parameter name="Min group size in # of scans">{min_n_scans}</parameter>
        <parameter name="Group intensity threshold">{baseline_int}</parameter>
        <parameter name="Min highest intensity">{max_int}</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>{mz_tol}</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Wavelets (ADAP)">
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            <module name="Wavelets (ADAP)">
                <parameter name="S/N threshold">{SN_threshold}</parameter>
                <parameter name="S/N estimator" selected="Wavelet Coeff. SN">
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                    <module name="Wavelet Coeff. SN">
                        <parameter name="Peak width mult.">3.0</parameter>
                        <parameter name="abs(wavelet coeffs.)">true</parameter>
                    </module>
                </parameter>
                <parameter name="min feature height">{max_int}</parameter>
                <parameter name="coefficient/area threshold">40</parameter>
                <parameter name="Peak duration range">
                    <min>0.0</min>
                    <max>0.8</max>
                </parameter>
                <parameter name="RT wavelet range">
                    <min>0.0</min>
                    <max>0.5</max>
                </parameter>
            </module>
        </parameter>
        <parameter measure="{mz_center_calculation}" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="true">{MSMS_pairing_tolerance_mz}</parameter>
        <parameter name="RT range for MS2 scan pairing (min)" selected="true">{MSMS_pairing_tolerance_tr}</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_deisotoper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>{mz_tol}</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">{tr_range_tolerance}</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">1</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_ransac.RansacAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>{mz_tol}</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" type="absolute">0.4</parameter>
        <parameter name="RT tolerance after correction" type="absolute">0.05</parameter>
        <parameter name="RANSAC iterations">0</parameter>
        <parameter name="Minimum number of points">0.2</parameter>
        <parameter name="Threshold value">0.5</parameter>
        <parameter name="Linear model">false</parameter>
        <parameter name="Require same charge state">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.PeakFinderModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>{mz_tol}</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">{tr_range_tolerance}</parameter>
        <parameter name="RT correction">true</parameter>
        <parameter name="Parallel (never combined with RT correction)">false</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>{mz_tol}</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" type="absolute">{tr_range_tolerance}</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_groupms2.GroupMS2Module">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Retention time tolerance" type="absolute">{tr_range_tolerance}</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>{mz_tol}</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Limit by RT edges">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.siriusexport.SiriusExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Mass list">masses2</parameter>
        <parameter name="Filename">
            <current_file>{mgf_path}</current_file>
        </parameter>
        <parameter name="Merge MS/MS" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.siriusexport.SiriusExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Mass list">masses2</parameter>
        <parameter name="Filename">
            <current_file>{mgf_path}_merged.mgf</current_file>
        </parameter>
        <parameter name="Merge MS/MS" selected="true">
            <parameter name="Select spectra to merge">across samples</parameter>
            <parameter name="m/z merge mode">weighted average (remove outliers)</parameter>
            <parameter name="intensity merge mode">sum intensities</parameter>
            <parameter name="Expected mass deviation">
                <absolutetolerance>0.03</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Cosine threshold (%)">0</parameter>
            <parameter name="Peak count threshold (%)">0.2</parameter>
            <parameter name="Isolation window offset (m/z)">0.0</parameter>
            <parameter name="Isolation window width (m/z)">0.5</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.csvexport.CSVExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>{csv_path}</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak height</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
	{save_project}
</batch>
