<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            {filestring}
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">1.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses1</parameter>
        <parameter name="Output netCDF filename (optional)" selected="true">
            <current_file>C:\Users\Martin\Documents\IJS-offline\MZmine opt\t1.cfd</current_file>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">1.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses2</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_msms.MsMsPeakPickerModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
        </parameter>
        <parameter name="m/z window">{mz_tol}</parameter>
        <parameter name="Time window">{tr_range_tolerance}</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_peakextender.PeakExtenderModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">extended</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>{mz_tol}</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Min height">{max_int}</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Filter mode">{filter_mode}</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>{mz_tol}</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" type="absolute">{tr_range_tolerance}</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>{mz_tol}</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">0.7</parameter>
        <parameter name="Retention time tolerance" type="absolute">{tr_range_tolerance}</parameter>
        <parameter name="Weight for RT">0.3</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_samerange.SameRangeGapFillerModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>{mz_tol}</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
	    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_groupms2.GroupMS2Module">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Retention time tolerance" type="absolute">{tr_range_tolerance}</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>{mz_tol}</absolutetolerance>
            <ppmtolerance>0.0</ppmtolerance>
        </parameter>
        <parameter name="Limit by RT edges">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.siriusexport.SiriusExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Mass list">masses2</parameter>
        <parameter name="Filename">
            <current_file>{mgf_path}</current_file>
        </parameter>
        <parameter name="Merge MS/MS" selected="false">
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        </parameter>
    </batchstep>
	<batchstep method="io.github.mzmine.modules.io.siriusexport.SiriusExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Mass list">masses2</parameter>
        <parameter name="Filename">
            <current_file>{mgf_path}_merged.mgf</current_file>
        </parameter>
        <parameter name="Merge MS/MS" selected="true">
            <parameter name="Select spectra to merge">across samples</parameter>
            <parameter name="m/z merge mode">weighted average (remove outliers)</parameter>
            <parameter name="intensity merge mode">sum intensities</parameter>
            <parameter name="Expected mass deviation">
                <absolutetolerance>0.03</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Cosine threshold (%)">0</parameter>
            <parameter name="Peak count threshold (%)">0.2</parameter>
            <parameter name="Isolation window offset (m/z)">0.0</parameter>
            <parameter name="Isolation window width (m/z)">0.5</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.csvexport.CSVExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>{csv_path}</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak height</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
	{save_project}
</batch>